CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:PPARA
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file doesnot contain "ch")
    Name to assign these images:All_channels
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:DAPI
    Conversion method:Combine
    Image type:RGB
    Name the output image:DAPIgray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:6|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
    Select the input image:DAPIgray
    Name the output image:RescaleDAPI
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:RescaleDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:300
    Suppress local maxima that are closer than this minimum allowed distance:140
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the new objects:RelabeledNuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ColorToGray:[module_num:9|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
    Select the input image:PPARA
    Conversion method:Combine
    Image type:RGB
    Name the output image:PPARAgray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
EnhanceOrSuppressFeatures:[module_num:10|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:PPARAgray
    Name the output image:EnhancedPPARA
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:11|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:EnhancedPPARA
    Name the output image:MaskedPPARA
    Use objects or an image as a mask?:Objects
    Select object for mask:RelabeledNuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:12|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedPPARA
    Name the primary objects to be identified:PPARA_speckles
    Typical diameter of objects, in pixel units (Min,Max):1,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:PPARA_speckles
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:RelabeledNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:15|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Select images to measure:PPARAgray
    Select objects to measure:PPARA_speckles

RelateObjects:[module_num:16|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notes:['Establish a parent-child between the foci (âx80x9cchildrenâx80x9d) and the nuclei (âx80x9cparentsâx80x9d) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:RelabeledNuclei
    Child objects:PPARA_speckles
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Paired
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:RelabeledNuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:All_channels
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):50
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Calibri
    Use scientific notation?:No
    Font weight:bold

DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:RelabeledNuclei
    Measurement to display:Children_PPARA_speckles_Count
    Select the image on which to display the measurements:All_channels
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):50
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Calibri
    Use scientific notation?:No
    Font weight:bold

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Nuclei_numbering_PLN2_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|D:\\CellProfiler_second_test\\PLN2
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:Speckle_count_PLN2_
    Number of digits:3
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|D:\\CellProfiler_second_test\\PLN2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:21|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\CellProfiler_second_test\\PLN2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:PPARA_speckles
    Combine these object measurements with those of the previous object?:No
    File name:DATA_speckles_PLN2.csv
    Use the object name for the file name?:No
    Data to export:RelabeledNuclei
    Combine these object measurements with those of the previous object?:No
    File name:DATA_nuclei_PLN2.csv
    Use the object name for the file name?:No
